PsychoPy2experiment version="2021.2.3"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Completed URL = https://nottinghammy.asia.qualtrics.com/jfe/form/SV_5mylepiD5LFyRjU
  Experiment info = {'participant': '', 'session': '001', 'group': "['ACB', 'BCA', 'BAC', 'CBA', 'CAB']"}
  Full-screen window = True
  Incomplete URL = https://nottinghammy.asia.qualtrics.com/jfe/form/SV_8pulKfjmsnk7pPw
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2020.2.10
  Window size (pixels) = [1536, 864]
  color = $[1.000,1.000,1.000]
  expName = workingMemoryTest
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Routines
  Routine WelcomeScreen
    CodeComponent setVarCode
      Code Type = Both
      Before Experiment:
        white = "white"
        black = "black"
        lightgrey = "lightgrey"

        # Do not use auto-js conversion here

        def createGrid(rows, cols, tiles, responseGrid=False):
            tileSize = 100 # pixels
            counter = 0
            # Starting position for grid
            xPos = 0 - ((rows * tileSize) / 2)
            yPos = 0 + ((cols * tileSize) / 2)

            # define tileColors
            tileColors = {
            0: None,
            1: white,
            2: black
        }

            # Create grid
            grid = []
            for i in range(rows):
                for j in range(cols):
                    tileCol = tileColors[tiles[counter]]
                    counter += 1
                    if tileCol is not None:
                        if responseGrid == True:
                            tileCol = tileColors[1]
                        grid.append(visual.Rect(
                            win=win,
                            width=1,
                            height=1,
                            units='pix',
                            fillColor=tileCol,
                            size = tileSize,
                            pos=[xPos, yPos],
                            lineColor= black))
                    xPos += tileSize
                yPos -= tileSize
                xPos = 0 - ((rows * tileSize) / 2)
            return grid

        def drawGrid(grid, onOff):
            for i in grid:
                i.setAutoDraw(onOff)

        # Compares tile color for two grids (g1 and g2)
        def compareGrid(g1, g2):
            testCols = []
            for tile in range(len(g1)):
                if g1[tile].fillColor == g2[tile].fillColor:
                    testCols.append(True)
                else:
                    testCols.append(False)
            return False not in testCols
      Before JS Experiment:
        var white = new util.Color("white")
        var black = new util.Color("black")
        var lightgrey = new util.Color("lightgrey")

        Array.prototype.append = [].push;
        var win = psychoJS.window

        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        function createGrid(rows, cols, tiles, responseGrid = false) {
            var counter, grid, tileCol, tileColors, tileSize, xPos, yPos;
            tileSize = 100;
            counter = 0;
            xPos = (0 - ((rows * tileSize) / 2));
            yPos = (0 + ((cols * tileSize) / 2));
            tileColors = {[0]: null, [1]: white, [2]: black};
            grid = [];
            for (var i = 0, _pj_a = rows; (i < _pj_a); i += 1) {
                for (var j = 0, _pj_b = cols; (j < _pj_b); j += 1) {
                    tileCol = tileColors[tiles[counter]];
                    counter += 1;
                    if ((tileCol !== null)) {
                        if ((responseGrid === true)) {
                            tileCol = tileColors[1];
                        }
                        grid.append(new visual.Rect({"win": win, "width": 1, "height": 1, "units": "pix", "fillColor": tileCol, "size": tileSize, "pos": [xPos, yPos], "lineColor": black}));
                    }
                    xPos += tileSize;
                }
                yPos -= tileSize;
                xPos = (0 - ((rows * tileSize) / 2));
            }
            return grid;
        }
        function drawGrid(grid, onOff) {
            for (var i, _pj_c = 0, _pj_a = grid, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                i.setAutoDraw(onOff);
            }
        }
        function compareGrid(g1, g2) {
            var testCols;
            testCols = [];
            for (var tile = 0, _pj_a = g1.length; (tile < _pj_a); tile += 1) {
                if ((g1[tile].fillColor === g2[tile].fillColor)) {
                    testCols.append(true);
                } else {
                    testCols.append(false);
                }
            }
            return (! _pj.in_es6(false, testCols));
        }
      Begin JS Experiment:
        event=psychoJS.eventManager;
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
    TextComponent welcomeTyping
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        **INSTRUCTIONS**

        Welcome to the typing task!

        In this task, you will see a number presented on the screen. Please type in the number as quickly as you can.

        After typing the number, you will press RETURN to continue to the next number.

        If you make any typing errors, you can use BACKSPACE to correct them.

        Please note that you can only use the numbers on top of the keyboard.

        Press SPACE to continue.
    KeyboardComponent welcomeResp
      allowedKeys = 'o','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine TypingPrac
    CodeComponent typeCode
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        inputText.text = ''
        event.clearEvents('keyboard')
        t=0
      Each Frame:
        keys = event.getKeys(keyList =['backspace','return','1','2','3','4','5','6','7','8','9','0'])
        if len(keys):
            if 'backspace' in keys:
                inputText.text = inputText.text[:-1]
            elif 'return' in keys:
                continueRoutine = False
                thisExp.addData("typedNumber", inputText.text)
                thisExp.addData('typingRT', t)
            else:
                if modify:
                    inputText.text = inputText.text + keys[0].upper()
                    modify = False
                else:
                    inputText.text = inputText.text + keys[0]
      End Routine:
        if int(inputText.text) ==productNo:
            # store in the data file manually:
            thisExp.addData('answerCorr', 1) # or True or 'Yes', or whatever
        else:
            thisExp.addData('answerCorr', 0)
    TextComponent typeText
      color = black
      letterHeight = 0.08
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $productNo
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    TextComponent inputText
      color = $[-0.498,-1.000,0.004]
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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    TextComponent contText
      color = $[-0.137,-0.137,-0.137]
      letterHeight = 0.035
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Press RETURN or ENTER to proceed. 
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  Routine TypingFeedback
    CodeComponent typeFBcode
      Code Type = Auto->JS
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      Begin Experiment:
        msg = ''
      Begin Routine:
        if int(inputText.text) ==productNo:
            msg='Correct!'
        else:
            msg = 'Wrong!'
    TextComponent rtFeedback
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine Blank500
    TextComponent blankEmpty
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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  Routine warningMac
    TextComponent text_41
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        **ATTENTION MAC USERS**

        If you are running this experiment on Safari, you will have to enable Auto-Play on this website.

        1) Press ESC once to access toolbar

        2) Click on Safari

        3) Go to Preferences

        4) Go to Websites

        5) Go to Auto-Play

        6) For pavlovia.org select 'Allow All Auto-Play' option


        Press SPACE to continue.
    KeyboardComponent MACresp
      allowedKeys = 'o','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine PracticeScreen_1
    TextComponent PracticeInstruction
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        We will start with practice trials. You have THREE practice trials before the real trial.

        Please try your best.

        Press SPACE to begin a series of 3 practice trials.
    KeyboardComponent PracticeScResp
      allowedKeys = 'o','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine BeginTrialScreen
    TextComponent beginTrialText
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        You have completed the practice trials.

        Press SPACE to begin the experiment.
    KeyboardComponent beginResp
      allowedKeys = 'o','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine MultiplyScreen
    TextComponent practMultText
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        **INSTRUCTIONS**

        Welcome to the multiplication task!

        In this task, you will see a multiplication problem presented on the screen. Please type in your answer as quickly as you can.

        After typing the answer, you will press RETURN to continue to the next problem.

        If you make any typing errors, you can use BACKSPACE to correct them.

        Please note that you can only use the numbers on top of the keypad.

        Press SPACE to continue.
    KeyboardComponent multiplyResp
      allowedKeys = 'o','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine MultiplyPrac
    CodeComponent multCode
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        inputText2.text = ''
        event.clearEvents('keyboard')
        t=0
      Each Frame:
        keys = event.getKeys(keyList =['backspace','return','1','2','3','4','5','6','7','8','9','0'])
        if len(keys):
            if 'backspace' in keys:
                inputText2.text = inputText2.text[:-1]
            elif 'return' in keys:
                continueRoutine = False
                thisExp.addData("typedAnswer", inputText2.text)
                thisExp.addData('multiplyRT', t)
            else:
                if modify:
                    inputText2.text = inputText2.text + keys[0].upper()
                    modify = False
                else:
                    inputText2.text = inputText2.text + keys[0]
      End Routine:
        if int(inputText2.text) == Answer:
            # store in the data file manually:
            thisExp.addData('multiplyCorr', 1)
        else:
            thisExp.addData('multiplyCorr', 0)
    TextComponent inputText2
      color = $[-0.498,-1.000,0.004]
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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    TextComponent productText
      color = black
      letterHeight = 0.08
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $problem
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    TextComponent contText2
      color = $[-0.137,-0.137,-0.137]
      letterHeight = 0.035
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Press RETURN or ENTER to proceed. 
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  Routine MultiplyFeedback
    CodeComponent MulFBcode
      Code Type = Auto->JS
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      Begin Experiment:
        message=''
      Begin Routine:
        if int(inputText2.text) ==Answer:
            message='Correct!'
        else:
            message = 'Wrong!'
    TextComponent mulFBText
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $message
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  Routine BreakTime
    TextComponent breakText
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        You have completed a block of trials. Thank you for persevering with the task.

        You deserve a break!

        When you are ready to continue with the experiment, press SPACE.
    KeyboardComponent breakResp
      allowedKeys = 'o','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine AuditoryScreen
    TextComponent pracAuditoryText
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        **INSTRUCTIONS**

        Welcome to the listening task!

        In this task, you will hear a series of number presented to you through your earphone. Please remember the numbers in the exact order that they were presented.

        Following the presentation of audio, you will be asked to type in your response. Please key in the numbers as you hear it. For example, if you hear '3 ... 2 ... 1', key in '321.'

        After typing the answer, you will press RETURN/ENTER to continue to the next problem. If you make any typing errors, you can use BACKSPACE to correct them.

        If you could not recall the series of numbers presented, take a guess, or press RETURN/ENTER to continue to the next set. When you answer correctly, the span (i.e., the number of digits to recall) increases.

        Press SPACE to continue.
    KeyboardComponent AuditoryResp
      allowedKeys = 'o','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine AuditoryFeedback
    CodeComponent AudioFBcode
      Code Type = Auto->JS
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      Begin Experiment:
        Feedback=''
      Begin Routine:
        if int(inputText4.text) ==digits_audio:
            Feedback='Correct!'
        else:
            Feedback = 'Wrong!'
    TextComponent AudioFBText
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Feedback
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  Routine Audio_Play
    SoundComponent soundPresentation
      sound [set every repeat] = $soundsJS
      startVal [time (s)] = 1
      syncScreenRefresh = False
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    TextComponent text1
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      text = Audio starts playing.
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    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent crossFix1
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine AdjustSoundInst
    TextComponent volumeText
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        **INSTRUCTIONS**

        Reminder, please put on your headphone/earphone now if you have not done so.

        Before we start, we will need to adjust the volume of your sound input.

        You will hear an audio playing when you press SPACE. Please adjust the audio to your desired volume.

        Once you are done, press SPACE to continue.
    KeyboardComponent volInstruResp
      allowedKeys = 'o','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine AdjustSoundVol
    StaticComponent ISI_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    SoundComponent sampleSoundVol
      sound = Audio/sample.mp3
      startVal [time (s)] = 0.0
      volume = 0.5
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    KeyboardComponent sampleResp
      allowedKeys = '0','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent sampleText
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        Now, you should hear an audio playing. Please adjust your microphone/earphone volume accordingly.

        Once you are done, please press SPACE to continue. [You do not have to wait till the audio finishes.]
  Routine vptScreen
    TextComponent vptInstruct
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        **INSTRUCTIONS**

        Welcome to the memory task!

        In this task, you will see a checkerboard-like grid, with the squares in the grid each randomly colored (in either white or black colors). Please remember the patterns presented.

        Following the presentation of patterns, you are then shown a blank grid and must reproduce the pattern. You can click on the square to change its color. If you make any clicking errors, you can just click the square again to correct them.

        After you are done, you will click on the CONTINUE button to continue to the next problem.

        If you could not recall the patterns presented, take a guess, or press CONTINUE to continue to the next set. The difficulty of the set increases with each correct answer.

        Press SPACE to continue.
    KeyboardComponent vptResp
      allowedKeys = 'o','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine patternGrid
    CodeComponent vptCode
      Code Type = Auto->JS
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      Begin Routine:
        patternGrid = createGrid(rows, cols, tiles)
        drawGrid(patternGrid, True)
      End Routine:
        drawGrid(patternGrid, False)
    TextComponent staticText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Blank1000
    TextComponent blankText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine responseGrid
    CodeComponent respCode
      Code Type = Auto->JS
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      Begin Routine:
        respGrid = createGrid(rows, cols, tiles, True)
        correct = False
        drawGrid(respGrid, True)
        mouseDown = False
      Each Frame:
        currentTile = 0
        patternTile = 0

        for tileN in range(len(respGrid)):
            # Get clicked tile and corresponding pattern tile
            currentTile = respGrid[tileN]
            patternTile = patternGrid[tileN]

            if respMouse.isPressedIn(currentTile) and currentTile.fillColor == white and not mouseDown:
                respGrid[tileN].fillColor = black
                mouseDown = True

            elif respMouse.isPressedIn(currentTile) and currentTile.fillColor == black and not mouseDown:
                respGrid[tileN].fillColor = white
                mouseDown = True
            # has mouse button been released?
            if not respMouse.getPressed()[0] == 1:
                mouseDown = False

        if respMouse.isPressedIn(image):
            # compare grids
            correct = compareGrid(respGrid, patternGrid)
            # save result
            thisExp.addData("vptCorrect", correct)

            if not correct:
                totalWrong += 1

            if totalWrong >= 2:
                continueRoutine = False
                trials.finished = True
                conditionLoop.finished = True

            # End the trial
            continueRoutine = False
      End Routine:
        drawGrid(respGrid, False)
    MouseComponent respMouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent image
      image = continueButton.png
      pos = [0, -0.35]
      size = [0.35, 0.08]
      startVal [time (s)] = 0.0
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  Routine vptFeedback
    CodeComponent vptFBcode
      Code Type = Auto->JS
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      Begin Routine:
        fb = "You were incorrect."
        if correct == True:
            fb = "You were correct!"
    TextComponent vptTEXT
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb
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  Routine counterRoutine
    CodeComponent WrongCode
      Code Type = Auto->JS
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      Begin Routine:
        totalWrong = 0
    TextComponent readyText
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $readyMsg
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  Routine respGridPrac
    CodeComponent respCodePrac
      Code Type = Auto->JS
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      Begin Routine:
        respGrid = createGrid(rows, cols, tiles, True)
        correct = False
        drawGrid(respGrid, True)
        mouseDown = False
      Each Frame:
        currentTile = 0
        patternTile = 0

        for tileN in range(len(respGrid)):
            # Get clicked tile and corresponding pattern tile
            currentTile = respGrid[tileN]
            patternTile = patternGrid[tileN]

            if respMousePrac.isPressedIn(currentTile) and currentTile.fillColor == white and not mouseDown:
                respGrid[tileN].fillColor = black
                mouseDown = True

            elif respMousePrac.isPressedIn(currentTile) and currentTile.fillColor == black and not mouseDown:
                respGrid[tileN].fillColor = white
                mouseDown = True
            # has mouse button been released?
            if not respMousePrac.getPressed()[0] == 1:
                mouseDown = False

        if respMousePrac.isPressedIn(imagePrac):
            # compare grids
            correct = compareGrid(respGrid, patternGrid)
            # save result
            thisExp.addData("correct", correct)

            if not correct:
                thisExp.addData("correct", correct)
                continueRoutine = False

            # End the trial
            continueRoutine = False
      End Routine:
        drawGrid(respGrid, False)
    MouseComponent respMousePrac
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent imagePrac
      image = continueButton.png
      pos = [0, -0.35]
      size = [0.35, 0.08]
      startVal [time (s)] = 0.0
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  Routine AuditoryPracticeSet
    CodeComponent audioCode2
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        inputText4.text = ''
        event.clearEvents('keyboard')
        t=0
      Each Frame:
        keys = event.getKeys(keyList =['backspace','return','1','2','3','4','5','6','7','8','9','0'])
        if len(keys):
            if 'backspace' in keys:
                inputText4.text = inputText4.text[:-1]
            elif 'return' in keys:
                continueRoutine = False
                thisExp.addData("typedAudioPrac", inputText4.text)
                thisExp.addData('audioPracRT', t)
            else:
                if modify:
                    inputText4.text = inputText4.text + keys[0].upper()
                    modify = False
                else:
                    inputText4.text = inputText4.text + keys[0]
      End Routine:
        if int(inputText4.text) ==digits_audio:
            # store in the data file manually:
            thisExp.addData('audioPrCorr', 1) # or True or 'Yes', or whatever
        else:
            thisExp.addData('audioPrCorr', 0)
    TextComponent inputText4
      color = $[-0.498,-1.000,0.004]
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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    TextComponent contText4
      color = $[-0.137,-0.137,-0.137]
      letterHeight = 0.035
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Press RETURN or ENTER to proceed. 
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    TextComponent RECALLtext2
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Recall
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  Routine AuditoryTrialss
    CodeComponent check_keys
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        inputText3.text = ''
        event.clearEvents('keyboard')
        t=0
      Each Frame:
        keys = event.getKeys(keyList =['backspace','return','1','2','3','4','5','6','7','8','9','0'])
        if len(keys):
            if 'backspace' in keys:
                inputText3.text = inputText3.text[:-1]
            elif 'return' in keys:
                continueRoutine = False
                thisExp.addData("EgnerDSresponse", inputText3.text)
                thisExp.addData('EgnerDSrt', t)
            else:
                if modify:
                    inputText3.text = inputText3.text + keys[0].upper()
                    modify = False
                else:
                    inputText3.text = inputText3.text + keys[0]
      End Routine:
        if int(inputText3.text) ==digits_audio:
            correct += 1
            # store in the data file manually:
            thisExp.addData('EgnerDSscore', 1) # or True or 'Yes', or whatever
        else:
            wrongTotal +=1
            thisExp.addData('EgnerDSscore', 0)

        # for incorrect, check that two responses exist
        # and that their sum of last two responses is zero

        if len(inputText3.text) >= 2 and correct == 1:
            audioRTrial.finished = True
        # If sum of last two responses is 2, move to next sequence
        elif wrongTotal >=2:
            audioCondLoop.finished = True
            inputText3 = []
    TextComponent inputText3
      color = $[-0.498,-1.000,0.004]
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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    TextComponent contText3
      color = $[-0.137,-0.137,-0.137]
      letterHeight = 0.035
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Press RETURN or ENTER to proceed. 
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    TextComponent RECALLtext
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = RECALL
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  Routine ENDING
    TextComponent ENDtext
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = This is the end of the experiment. Thank you for your time.
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  Routine READY
    TextComponent text_1
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text = When you are ready to start, press SPACE to continue. 
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    KeyboardComponent key_resp1
      allowedKeys = 'o','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine SettingRoutine
    TextComponent ReadyMessageNext
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Get ready! The audio set is starting. 
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  Routine audio_PlayWAIS
    SoundComponent WAIS_sound
      sound [set every repeat] = $soundsWAIS
      startVal [time (s)] = 1
      syncScreenRefresh = False
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    TextComponent reminderTextSound
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      text = Audio starts playing.
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    StaticComponent ISI_3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent textFIXsound
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine audioTrial_WAIS
    CodeComponent check_keys2
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        inputText9.text = ''
        event.clearEvents('keyboard')
        t=0
      Each Frame:
        keys = event.getKeys(keyList =['backspace','return','1','2','3','4','5','6','7','8','9','0'])
        if len(keys):
            if 'backspace' in keys:
                inputText9.text = inputText9.text[:-1]
            elif 'return' in keys:
                continueRoutine = False
                thisExp.addData("WAISDSresponse", inputText9.text)
                thisExp.addData('WAISDSrt', t)
            else:
                if modify:
                    inputText9.text = inputText9.text + keys[0].upper()
                    modify = False
                else:
                    inputText9.text = inputText9.text + keys[0]
      End Routine:
        if int(inputText9.text) ==digits_audioWAIS:
            correct += 1
            # store in the data file manually:
            thisExp.addData('WAISDSscore', 1) # or True or 'Yes', or whatever
        else:
            wrongTotal +=1
            thisExp.addData('WAISDSscore', 0)

        # for incorrect, check that two responses exist
        # and that their sum of last two responses is zero

        if len(inputText9.text) >= 2 and correct == 1:
            audioRTrialwais.finished = True
        # If sum of last two responses is 2, move to next sequence
        elif wrongTotal >=2:
            audioCondLoopwais.finished = True
            inputText9 = []
    TextComponent inputText9
      color = $[-0.498,-1.000,0.004]
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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    TextComponent continuingText
      color = $[-0.137,-0.137,-0.137]
      letterHeight = 0.035
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Press RETURN or ENTER to proceed. 
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    TextComponent recallingTime
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Recall
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  Routine countingCW
    CodeComponent counting
      Code Type = Auto->JS
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      Begin Routine:
        correct=0
        wrongTotal =0
Flow
  Routine WelcomeScreen
  Routine warningMac
  Routine PracticeScreen_1
  LoopInitiator typingLoopPract loopType="TrialHandler"
    conditionsFile = typingPractice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('productNo', 39)]),
      OrderedDict([('productNo', 41)]),
      OrderedDict([('productNo', 59)])]
    Routine Blank500
    Routine TypingPrac
    Routine TypingFeedback
  LoopTerminator typingLoopPract
  Routine BeginTrialScreen
  LoopInitiator typingRTrial loopType="TrialHandler"
    conditionsFile = typingTest_stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('productNo', 6)]),
      OrderedDict([('productNo', 9)]),
      OrderedDict([('productNo', 8)]),
      OrderedDict([('productNo', 10)]),
      OrderedDict([('productNo', 12)]),
      OrderedDict([('productNo', 14)]),
      OrderedDict([('productNo', 15)]),
      OrderedDict([('productNo', 16)]),
      OrderedDict([('productNo', 18)]),
      OrderedDict([('productNo', 20)]),
      OrderedDict([('productNo', 21)]),
      OrderedDict([('productNo', 24)]),
      OrderedDict([('productNo', 27)]),
      OrderedDict([('productNo', 28)]),
      OrderedDict([('productNo', 30)]),
      OrderedDict([('productNo', 32)]),
      OrderedDict([('productNo', 35)]),
      OrderedDict([('productNo', 36)]),
      OrderedDict([('productNo', 40)]),
      OrderedDict([('productNo', 42)]),
      OrderedDict([('productNo', 45)]),
      OrderedDict([('productNo', 48)]),
      OrderedDict([('productNo', 49)]),
      OrderedDict([('productNo', 54)]),
      OrderedDict([('productNo', 56)]),
      OrderedDict([('productNo', 63)]),
      OrderedDict([('productNo', 64)]),
      OrderedDict([('productNo', 72)])]
    Routine Blank500
    Routine TypingPrac
  LoopTerminator typingRTrial
  Routine BreakTime
  LoopInitiator TaskOrderCond loopType="TrialHandler"
    conditionsFile = $'conditions'+expInfo['group']+'.xlsx'
    isTrials = False
    loopType = sequential
    nReps = 1
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    LoopInitiator TaskA loopType="TrialHandler"
      loopType = random
      nReps = nRepsTask1
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      Routine MultiplyScreen
      Routine PracticeScreen_1
      LoopInitiator multiLoopPrac loopType="TrialHandler"
        conditionsFile = multiplicationPract.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('problem', '1 x 7 ='), ('OperandType', None), ('productType', 'practiceQ'), ('Answer', 7)]),
          OrderedDict([('problem', '5 x 10 ='), ('OperandType', None), ('productType', 'practiceQ'), ('Answer', 50)]),
          OrderedDict([('problem', '3 x 11 ='), ('OperandType', None), ('productType', 'practiceQ'), ('Answer', 33)])]
        Routine Blank500
        Routine MultiplyPrac
        Routine MultiplyFeedback
      LoopTerminator multiLoopPrac
      Routine BeginTrialScreen
      LoopInitiator trials_2 loopType="TrialHandler"
        conditionsFile = multiplyConds.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('fileee', 'multiplOne.xlsx')]),
          OrderedDict([('fileee', 'multiplTwo.xlsx')])]
        Routine READY
        LoopInitiator multiRTrial loopType="TrialHandler"
          conditionsFile = $fileee
          loopType = random
          nReps = 1
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          Routine Blank500
          Routine MultiplyPrac
        LoopTerminator multiRTrial
      LoopTerminator trials_2
      Routine BreakTime
    LoopTerminator TaskA
    LoopInitiator TaskB loopType="TrialHandler"
      loopType = random
      nReps = nRepsTask2
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      Routine AdjustSoundInst
      Routine AdjustSoundVol
      Routine AuditoryScreen
      Routine PracticeScreen_1
      LoopInitiator audioLoopPrac loopType="TrialHandler"
        conditionsFile = auditoryPract.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [OrderedDict([('audiospan', 'practice'), ('digits_audio', 123), ('soundsJS', 'Audio/123.mp3')]),
          OrderedDict([('audiospan', 'practice'), ('digits_audio', 321), ('soundsJS', 'Audio/321..mp3')]),
          OrderedDict([('audiospan', 'practice'), ('digits_audio', 911), ('soundsJS', 'Audio/911.mp3')])]
        Routine Audio_Play
        Routine AuditoryPracticeSet
        Routine AuditoryFeedback
      LoopTerminator audioLoopPrac
      Routine BeginTrialScreen
      LoopInitiator audioCondLoop loopType="TrialHandler"
        conditionsFile = Egner.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [OrderedDict([('Condition', 'twoAudio.xlsx')]),
          OrderedDict([('Condition', 'threeAudio.xlsx')]),
          OrderedDict([('Condition', 'fourAudio.xlsx')]),
          OrderedDict([('Condition', 'fiveAudio.xlsx')]),
          OrderedDict([('Condition', 'sixAudio.xlsx')]),
          OrderedDict([('Condition', 'sevenAudio.xlsx')]),
          OrderedDict([('Condition', 'eightAudio.xlsx')]),
          OrderedDict([('Condition', 'nineAudio.xlsx')])]
        Routine countingCW
        LoopInitiator audioRTrial loopType="TrialHandler"
          conditionsFile = $Condition
          loopType = sequential
          nReps = 1
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          Routine Audio_Play
          Routine AuditoryTrialss
        LoopTerminator audioRTrial
      LoopTerminator audioCondLoop
      LoopInitiator audioCondLoopwais loopType="TrialHandler"
        conditionsFile = WAIS.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [OrderedDict([('ConditionWAIS', 'twoWAIS.xlsx')]),
          OrderedDict([('ConditionWAIS', 'threeWAIS.xlsx')]),
          OrderedDict([('ConditionWAIS', 'fourWAIS.xlsx')]),
          OrderedDict([('ConditionWAIS', 'fiveWAIS.xlsx')]),
          OrderedDict([('ConditionWAIS', 'sixWAIS.xlsx')]),
          OrderedDict([('ConditionWAIS', 'sevenWAIS.xlsx')]),
          OrderedDict([('ConditionWAIS', 'eightWAIS.xlsx')]),
          OrderedDict([('ConditionWAIS', 'nineWAIS.xlsx')])]
        Routine countingCW
        LoopInitiator audioRTrialwais loopType="TrialHandler"
          conditionsFile = $ConditionWAIS
          loopType = sequential
          nReps = 1
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          Routine audio_PlayWAIS
          Routine audioTrial_WAIS
        LoopTerminator audioRTrialwais
      LoopTerminator audioCondLoopwais
      Routine BreakTime
    LoopTerminator TaskB
    LoopInitiator TaskC loopType="TrialHandler"
      loopType = random
      nReps = nRepsTask3
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      Routine vptScreen
      Routine PracticeScreen_1
      LoopInitiator vptLoopPrac loopType="TrialHandler"
        conditionsFile = practiceVPT.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('tiles', [2, 2, 0, 1, 1, 1, 2, 1, 2]), ('rows', 3), ('cols', 3)]),
          OrderedDict([('tiles', [1, 2, 0, 1, 1, 2, 2, 1, 2]), ('rows', 3), ('cols', 3)]),
          OrderedDict([('tiles', [2, 1, 0, 1, 1, 1, 2, 2, 2]), ('rows', 3), ('cols', 3)])]
        Routine patternGrid
        Routine Blank1000
        Routine respGridPrac
        Routine vptFeedback
      LoopTerminator vptLoopPrac
      Routine BeginTrialScreen
      LoopInitiator conditionLoop loopType="TrialHandler"
        conditionsFile = condsLoop.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [OrderedDict([('sheet', 'blockTwo.xlsx'), ('readyMsg', 'Ready for the next set? ')]),
          OrderedDict([('sheet', 'blockThree.xlsx'), ('readyMsg', 'Ready for the next set? ')]),
          OrderedDict([('sheet', 'blockFour.xlsx'), ('readyMsg', 'Ready for the next set? ')]),
          OrderedDict([('sheet', 'blockFive.xlsx'), ('readyMsg', 'Ready for the next set? ')]),
          OrderedDict([('sheet', 'blockSix.xlsx'), ('readyMsg', 'Ready for the next set? ')]),
          OrderedDict([('sheet', 'blockSeven.xlsx'), ('readyMsg', 'Ready for the next set? ')]),
          OrderedDict([('sheet', 'blockEight.xlsx'), ('readyMsg', 'Ready for the next set? ')]),
          OrderedDict([('sheet', 'blockNine.xlsx'), ('readyMsg', 'Ready for the next set? ')]),
          OrderedDict([('sheet', 'blockTen.xlsx'), ('readyMsg', 'Ready for the next set? ')]),
          OrderedDict([('sheet', 'blockEleven.xlsx'), ('readyMsg', 'Ready for the next set? ')]),
          OrderedDict([('sheet', 'blockTwelve.xlsx'), ('readyMsg', 'Ready for the next set? ')]),
          OrderedDict([('sheet', 'blockThirteen.xlsx'), ('readyMsg', 'Ready for the next set? ')]),
          OrderedDict([('sheet', 'blockFourteen.xlsx'), ('readyMsg', 'Ready for the next set? ')]),
          OrderedDict([('sheet', 'blockFifteen.xlsx'), ('readyMsg', 'Ready for the next set? ')])]
        Routine counterRoutine
        LoopInitiator trials loopType="TrialHandler"
          conditionsFile = $sheet
          loopType = sequential
          nReps = 1
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          Routine patternGrid
          Routine Blank1000
          Routine responseGrid
        LoopTerminator trials
      LoopTerminator conditionLoop
      Routine BreakTime
    LoopTerminator TaskC
  LoopTerminator TaskOrderCond
  Routine ENDING
